PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Olfactometer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine program_select
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    CodeComponent select_csv
      Code Type = Auto->JS
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      Before Experiment:
        import os
        from psychopy import gui, visual, core
        import csv
        import requests
      Begin Routine:
        program_dir = "/home/tpmint/Documents/olfacto_ros2/scripts/programs"  # Folder where your CSV files are
        files = [f for f in os.listdir(program_dir) if f.endswith(".csv")]

        # Show a dialog with list of files
        dlg = gui.Dlg(title="Choose Program")
        dlg.addField('Program:', choices=files)
        if dlg.show() is None:
            core.quit()

        selected_file = os.path.join(program_dir, dlg.data[0])
        program = []
        with open(selected_file, newline='') as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                program.append({
                    "valve": int(row['Valve']),
                    "ratio": float(row['ratio']),
                    "duration": float(row['duration']),
                    "total_flow": float(row['total_flow'])
                })

        thisExp.addData('SelectedProgram', dlg.data[0])
  Routine wait_for_trigger
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    KeyboardComponent mri_trigger
      allowedKeys = 'y','5','t'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        msg_wait = visual.TextStim(win, text="Waiting for trigger...", height=0.05)
        msg_trigger = visual.TextStim(win, text="TRIGGER RECEIVED", height=0.05)
      Each Frame:
        keys = event.getKeys()
        if 't' in keys:
            msg_trigger.draw()
            win.flip()
            continueRoutine = False
        else:
            msg_wait.draw()
      End Routine:
        msg_trigger.draw()
  Routine run_program
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    CodeComponent Program
      Code Type = Py
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      Begin Routine:
        print("run_program routine started")
        win.flip()
        msg_running = visual.TextStim(win, text="Program running...", height=0.05)
        msg_running.draw()
        win.flip()
        pi_address = "http://olfactopi.local:8000/stimulus"

        try:
            for row in program:
                payload = {
                    "valve": row['valve'],
                    "ratio": row['ratio'],
                    "duration": row['duration'],
                    "total_flow": row['total_flow']
                }
                msg_running.text = f"Sending:\nValve {payload['valve']}, Ratio {payload['ratio']}, Duration {payload['duration']}, Flow {payload['total_flow']}"
                msg_running.draw()
                win.flip()

                print(f"Sending: {payload}")
                response = requests.post("http://olfactopi.local:8000/stimulus", json=payload)
                core.wait(row['duration'])

        except Exception as e:
            print(f"Error running odor schedule: {e}")
      Each Frame:
        msg_running.draw()
Flow
  Routine program_select
  Routine wait_for_trigger
  Routine run_program
