PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Schedule
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Odour_Program
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import csv
        import requests

        csv_path = '/home/tpmint/Documents/olfacto_ros2/scripts/example_schedule.csv'
        pi_address = "http://olfactopi.local:8000/stimulus"

        try:
            with open(csv_path, newline='') as csvfile:
                reader = csv.DictReader(csvfile)
                for row in reader:
                    valve = int(row['Valve'])
                    ratio = float(row['ratio'])
                    duration = float(row['duration'])
                    total_flow = float(row['total_flow'])

                    payload = {
                        "valve": valve,
                        "ratio": ratio,
                        "duration": duration,
                        "total_flow": total_flow
                    }

                    print(f"Sending: {payload}")
                    response = requests.post(pi_address, json=payload)
                    core.wait(duration)
        except Exception as e:
            print(f"Error running odor schedule: {e}")
  Routine Trigger
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    KeyboardComponent mri_trigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = mri_trigger.keys is not None
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if mri_trigger.keys:
            print("TRIGGER RECEIVED!")
Flow
  Routine Trigger
  Routine Odour_Program
